PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = lab-tut.7
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon
      fillColor = 1.0000, -0.0039, -0.3725
      lineColor = 1.0000, -0.0039, -0.3725
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine beep
    SoundComponent sound_1
      sound [set every repeat] = $freq
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine response
    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Report the delay between the key press and the sound (on a scale of 0-999)
        Click submit after entering value
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3,0.1)
      startVal [time (s)] = 0
      text = Submit
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/tanmayikalapatapu/Downloads/lab.tut.7_data - Sheet1.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('delay', 0.1), ('freq', 400), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.4), ('freq', 400), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.7), ('freq', 400), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.1), ('freq', 1000), ('condition', 'exp')]),
      OrderedDict([('delay', 0.4), ('freq', 1000), ('condition', 'exp')]),
      OrderedDict([('delay', 0.7), ('freq', 1000), ('condition', 'exp')]),
      OrderedDict([('delay', 0.1), ('freq', 1000), ('condition', 'exp')]),
      OrderedDict([('delay', 0.4), ('freq', 1000), ('condition', 'exp')]),
      OrderedDict([('delay', 0.7), ('freq', 1000), ('condition', 'exp')]),
      OrderedDict([('delay', 0.1), ('freq', 1000), ('condition', 'exp')]),
      OrderedDict([('delay', 0.4), ('freq', 1000), ('condition', 'exp')]),
      OrderedDict([('delay', 0.7), ('freq', 1000), ('condition', 'exp')])]
    Routine trial
    Routine beep
    Routine response
  LoopTerminator trials
